PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = 'data/%s_%s' % (expName, expInfo['date'])
  End Message = Спасибо!
  Experiment info = {'фамилия': '', 'возраст': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[-0.2314, -0.2314, -0.2314]
  expName = magic_vkr
  frameRateMsg = Экран загружается, подождите секунду, пожалуйста
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Добрый день! Приглашаем принять участие в исследовании принятия решений.

        Участие займёт около 10 минут. Данные анонимны и используются только в обобщённом виде. Продолжая, вы даёте согласие на участие.

        Пожалуйста, проходите исследование на компьютере или ноутбуке.

        Чтобы начать, нажмите пробел.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_assign
      Code Type = Both
      Begin Experiment:
        import random
        g = str(expInfo.get('group', '')).strip()
        nDebug = 1 if str(expInfo.get('фамилия', '')).strip() == '0' else 0
        thisExp.addData('surname', str(expInfo.get('фамилия', '')).strip())
        thisExp.addData('age', str(expInfo.get('возраст', '')).strip())
        if g not in ['1', '2', '3', '4']:
            g = random.choice(['1', '2', '3', '4'])
        group = int(g)
        choice_resp = ''
        choice_rt = -1
        nEffort = 0
        nBefore = 0
        nAfter = 0
        tob_resp = {}
      Begin JS Experiment:
        var g = String(expInfo['group'] || '').trim();
        nDebug = (String(expInfo['фамилия'] || '').trim() === '0') ? 1 : 0;
        psychoJS.experiment.addData('surname', String(expInfo['фамилия'] || '').trim());
        psychoJS.experiment.addData('age', String(expInfo['возраст'] || '').trim());
        if (['1','2','3','4'].indexOf(g) < 0) { g = ['1','2','3','4'][Math.floor(Math.random()*4)]; }
        group = parseInt(g);
        choice_resp = ''; choice_rt = -1; nEffort = 0; nBefore = 0; nAfter = 0; tob_resp = {};
  Routine debug_pick
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    TextComponent debug_text
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Отладка. Выберите группу для прохождения.
      wrapWidth = 1.4
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    TextComponent debug_hint
      letterHeight = 0.028
      pos = (0, 0.17)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        1: опросник до, лёгкая магия      2: опросник до, трудная магия
        3: опросник после, лёгкая магия      4: опросник после, трудная магия
    ButtonComponent dbg1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.45, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 1
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    ButtonComponent dbg2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.15, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 2
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    ButtonComponent dbg3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.15, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 3
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    ButtonComponent dbg4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.45, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 4
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    CodeComponent code_debug
      Code Type = Both
      End JS Routine:
        var _bs = [dbg1, dbg2, dbg3, dbg4];
        for (var i = 0; i < 4; i++) { if (_bs[i].numClicks > 0) { group = i + 1; } }
      End Routine:
        for i, b in enumerate([dbg1, dbg2, dbg3, dbg4]):
            if b.numClicks > 0:
                group = i + 1
  Routine setup
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    TextComponent setup_blank
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      wrapWidth = 1.4
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    CodeComponent code_setup
      Code Type = Both
      Begin JS Routine:
        order = (group === 1 || group === 2) ? 'before' : 'after';
        cost = (group === 1 || group === 3) ? 'easy' : 'hard';
        nBefore = (order === 'before') ? 1 : 0;
        nAfter = 1 - nBefore;
        psychoJS.experiment.addData('group', group);
        psychoJS.experiment.addData('order', order);
        psychoJS.experiment.addData('cost', cost);
        psychoJS.experiment.addData('debug', nDebug);
      Begin Routine:
        order = 'before' if group in (1, 2) else 'after'
        cost = 'easy' if group in (1, 3) else 'hard'
        nBefore = 1 if order == 'before' else 0
        nAfter = 1 - nBefore
        thisExp.addData('group', group)
        thisExp.addData('order', order)
        thisExp.addData('cost', cost)
        thisExp.addData('debug', nDebug)
  Routine tob_instr_before
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    TextboxComponent tob_instr_text_before
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.032
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Пожалуйста, укажите степень Вашего согласия с приведенными утверждениями.

        1 — Абсолютно не согласен
        2 — Не согласен
        3 — Скорее не согласен
        4 — Не знаю, не уверен
        5 — Скорее согласен
        6 — Согласен
        7 — Абсолютно согласен

        Ответ выбирается стрелками влево и вправо (или клавишами 1–7) и подтверждается пробелом.

        Нажмите пробел, чтобы продолжить.
    KeyboardComponent tob_instr_key_before
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tob_item_before
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    TextComponent tob_text_before
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent tob_slider_before
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent tob_hint_before
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent tob_key_before
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tob_before
      Code Type = Both
      Begin JS Routine:
        resp = null;
        sliderSeen = null;
        keyI = 0;
      Begin Routine:
        resp = None
        slider_seen = None
        key_i = 0
      Each Frame:
        _r = tob_slider_before.getRating()
        if _r is not None and _r != slider_seen:
            slider_seen = _r
            resp = int(round(_r))
        while key_i < len(_tob_key_before_allKeys):
            _k = _tob_key_before_allKeys[key_i].name
            key_i += 1
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                resp = int(_k)
            elif _k == 'left':
                resp = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                resp = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
        if resp is not None:
            tob_slider_before.markerPos = resp
      Each JS Frame:
        var _r = tob_slider_before.getRating();
        if (typeof _r !== 'undefined' && _r !== null && _r !== sliderSeen) {
          sliderSeen = _r;
          resp = Math.round(_r);
        }
        while (keyI < _tob_key_before_allKeys.length) {
          var _k = _tob_key_before_allKeys[keyI].name;
          keyI += 1;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { resp = parseInt(_k); }
          else if (_k === 'left') { resp = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { resp = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
        }
        if (resp !== null && typeof resp !== 'undefined') { tob_slider_before.setMarkerPos(resp); }
      End JS Routine:
        tob_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('tob_' + String(item_n), resp);
        psychoJS.experiment.addData('tob_rt_' + String(item_n), t);
      End Routine:
        tob_resp[int(item_n)] = resp
        thisExp.addData('tob_' + str(item_n), resp)
        thisExp.addData('tob_rt_' + str(item_n), t)
  Routine choice_instr
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    CodeComponent code_choice_instr
      Code Type = Both
      Begin Experiment:
        TXT_CHOICE_EASY = 'В качестве бонуса за участие вы можете нажать на кнопку «Магия» и тем самым повысить вероятность того, что какое-то важное для вас приятное событие произойдёт в ближайшее время, либо нажать на кнопку «Пропустить» и перейти к следующему этапу.'
        TXT_CHOICE_HARD = 'В качестве бонуса за участие вы можете нажать на кнопку «Магия» и тем самым повысить вероятность того, что какое-то важное для вас приятное событие произойдёт в ближайшее время. Для этого нужно будет напечатать букву М не менее 30 раз, чем больше, тем выше вероятность события. Либо нажмите на кнопку «Пропустить» и перейдите к следующему этапу.'
        TXT_CHOICE_TAIL = '\n\nВыбрать можно ЛИБО мышью, нажав на кнопку, ЛИБО клавишей ВЛЕВО (Магия) или ВПРАВО (Пропустить).\n\nНажмите пробел, чтобы перейти к выбору.'
      Begin JS Experiment:
        TXT_CHOICE_EASY = "В качестве бонуса за участие вы можете нажать на кнопку «Магия» и тем самым повысить вероятность того, что какое-то важное для вас приятное событие произойдёт в ближайшее время, либо нажать на кнопку «Пропустить» и перейти к следующему этапу.";
        TXT_CHOICE_HARD = "В качестве бонуса за участие вы можете нажать на кнопку «Магия» и тем самым повысить вероятность того, что какое-то важное для вас приятное событие произойдёт в ближайшее время. Для этого нужно будет напечатать букву М не менее 30 раз, чем больше, тем выше вероятность события. Либо нажмите на кнопку «Пропустить» и перейдите к следующему этапу.";
        TXT_CHOICE_TAIL = "\n\nВыбрать можно ЛИБО мышью, нажав на кнопку, ЛИБО клавишей ВЛЕВО (Магия) или ВПРАВО (Пропустить).\n\nНажмите пробел, чтобы перейти к выбору.";
      Begin JS Routine:
        instr_txt = ((cost === 'easy') ? TXT_CHOICE_EASY : TXT_CHOICE_HARD) + TXT_CHOICE_TAIL;
      Begin Routine:
        instr_txt = (TXT_CHOICE_EASY if cost == 'easy' else TXT_CHOICE_HARD) + TXT_CHOICE_TAIL
    TextComponent choice_instr_text
      letterHeight = 0.036
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
      wrapWidth = 1.3
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    KeyboardComponent choice_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choice
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    CodeComponent code_choice
      Code Type = Both
      Begin JS Routine:
        choice_resp = ''; choice_rt = -1; end_at = null;
        psychoJS.eventManager.clearEvents();
      Begin Routine:
        choice_resp = ''
        choice_rt = -1
        end_at = None
        event.clearEvents()
      Each Frame:
        if end_at is None:
            keys = event.getKeys(keyList=['left', 'right'])
            if 'left' in keys or btn_magic.numClicks > 0:
                choice_resp = 'magic'; choice_rt = t; end_at = t + 0.35
                btn_magic.fillColor = 'goldenrod'
            elif 'right' in keys or btn_skip.numClicks > 0:
                choice_resp = 'skip'; choice_rt = t; end_at = t + 0.35
                btn_skip.fillColor = 'goldenrod'
        elif t >= end_at:
            continueRoutine = False
      Each JS Frame:
        if (end_at === null) {
          var keys = psychoJS.eventManager.getKeys({keyList: ['left', 'right']});
          if (keys.indexOf('left') >= 0 || btn_magic.numClicks > 0) {
            choice_resp = 'magic'; choice_rt = t; end_at = t + 0.35;
            btn_magic.setFillColor(new util.Color('goldenrod'));
          } else if (keys.indexOf('right') >= 0 || btn_skip.numClicks > 0) {
            choice_resp = 'skip'; choice_rt = t; end_at = t + 0.35;
            btn_skip.setFillColor(new util.Color('goldenrod'));
          }
        } else if (t >= end_at) {
          continueRoutine = false;
        }
      End JS Routine:
        nEffort = (choice_resp === 'magic') ? 1 : 0;
        psychoJS.experiment.addData('choice', choice_resp);
        psychoJS.experiment.addData('choice_rt', choice_rt);
      End Routine:
        nEffort = 1 if choice_resp == 'magic' else 0
        thisExp.addData('choice', choice_resp)
        thisExp.addData('choice_rt', choice_rt)
    TextComponent choice_head
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Ваш выбор
      wrapWidth = 1.4
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    ButtonComponent btn_magic
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.25, 0.0)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Магия
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    ButtonComponent btn_skip
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.25, 0.0)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Пропустить
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    TextComponent choice_keys
      color = lightgrey
      letterHeight = 0.028
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      text = ← стрелка влево                                стрелка вправо →
      wrapWidth = 1.4
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    TextComponent choice_hint
      color = lightgrey
      letterHeight = 0.028
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Нажмите на кнопку мышью ЛИБО клавишу ВЛЕВО (Магия) или ВПРАВО (Пропустить)
      wrapWidth = 1.4
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  Routine effort
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    TextComponent effort_text
      letterHeight = 0.032
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Вы можете в это верить или не верить, но все древнейшие учения говорят, что действенность магии зависит от прилагаемых усилий.

        Напечатайте в поле ниже букву М не менее 30 раз. Чем больше, тем выше вероятность события. Когда закончите, нажмите «Готово».
    TextboxComponent effort_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.035
      padding = 0.02
      placeholder = нажмите сюда и печатайте
      pos = (0, -0.02)
      size = (1.2, 0.26)
      startVal [time (s)] = 0.0
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    ButtonComponent effort_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.36)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    CodeComponent code_effort
      Code Type = Both
      End JS Routine:
        var txt = effort_box.text || '';
        psychoJS.experiment.addData('effort_len', txt.length);
        psychoJS.experiment.addData('effort_m', (txt.toLowerCase().match(/м/g) || []).length);
        psychoJS.experiment.addData('effort_time', t);
      End Routine:
        txt = effort_box.text or ''
        thisExp.addData('effort_len', len(txt))
        thisExp.addData('effort_m', txt.lower().count('м'))
        thisExp.addData('effort_time', t)
  Routine rating
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    TextComponent rating_text
      letterHeight = 0.035
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
      text = Оцените, пожалуйста, то приятное событие, о котором вы думали.
      wrapWidth = 1.3
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    TextComponent lbl_imp
      letterHeight = 0.03
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = Насколько это событие для вас важно?
      wrapWidth = 1.4
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    SliderComponent importance
      color = white
      forceEndRoutine = False
      granularity = 1
      initVal = 50
      labels = 'совсем не важно', 'крайне важно'
      letterHeight = 0.025
      pos = (0, 0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    TextComponent lbl_ctrl
      letterHeight = 0.03
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      text = Насколько его исход зависит от вас самих?
      wrapWidth = 1.4
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    SliderComponent control
      color = white
      forceEndRoutine = False
      granularity = 1
      initVal = 50
      labels = 'совсем не зависит', 'полностью зависит'
      letterHeight = 0.025
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    ButtonComponent rating_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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  Routine tob_instr_after
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    TextboxComponent tob_instr_text_after
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.032
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Пожалуйста, укажите степень Вашего согласия с приведенными утверждениями.

        1 — Абсолютно не согласен
        2 — Не согласен
        3 — Скорее не согласен
        4 — Не знаю, не уверен
        5 — Скорее согласен
        6 — Согласен
        7 — Абсолютно согласен

        Ответ выбирается стрелками влево и вправо (или клавишами 1–7) и подтверждается пробелом.

        Нажмите пробел, чтобы продолжить.
    KeyboardComponent tob_instr_key_after
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tob_item_after
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    TextComponent tob_text_after
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent tob_slider_after
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent tob_hint_after
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent tob_key_after
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tob_after
      Code Type = Both
      Begin JS Routine:
        resp = null;
        sliderSeen = null;
        keyI = 0;
      Begin Routine:
        resp = None
        slider_seen = None
        key_i = 0
      Each Frame:
        _r = tob_slider_after.getRating()
        if _r is not None and _r != slider_seen:
            slider_seen = _r
            resp = int(round(_r))
        while key_i < len(_tob_key_after_allKeys):
            _k = _tob_key_after_allKeys[key_i].name
            key_i += 1
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                resp = int(_k)
            elif _k == 'left':
                resp = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                resp = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
        if resp is not None:
            tob_slider_after.markerPos = resp
      Each JS Frame:
        var _r = tob_slider_after.getRating();
        if (typeof _r !== 'undefined' && _r !== null && _r !== sliderSeen) {
          sliderSeen = _r;
          resp = Math.round(_r);
        }
        while (keyI < _tob_key_after_allKeys.length) {
          var _k = _tob_key_after_allKeys[keyI].name;
          keyI += 1;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { resp = parseInt(_k); }
          else if (_k === 'left') { resp = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { resp = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
        }
        if (resp !== null && typeof resp !== 'undefined') { tob_slider_after.setMarkerPos(resp); }
      End JS Routine:
        tob_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('tob_' + String(item_n), resp);
        psychoJS.experiment.addData('tob_rt_' + String(item_n), t);
      End Routine:
        tob_resp[int(item_n)] = resp
        thisExp.addData('tob_' + str(item_n), resp)
        thisExp.addData('tob_rt_' + str(item_n), t)
  Routine suspicion
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    TextComponent susp_text
      letterHeight = 0.032
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Как вы думаете, что изучалось в этом исследовании? Напишите в свободной форме и нажмите «Готово».
      wrapWidth = 1.3
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    TextboxComponent susp_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = 0.02
      placeholder = нажмите сюда и печатайте
      pos = (0, -0.02)
      size = (1.2, 0.26)
      startVal [time (s)] = 0.0
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    ButtonComponent susp_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.36)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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  Routine row_entry
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    TextComponent row_text
      letterHeight = 0.032
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Студенты РАНХиГС, которые хотят получить баллы за участие, введите номер вашей строки в списке группы. Если баллы вам не нужны, оставьте поле пустым и нажмите «Готово».
      wrapWidth = 1.3
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    TextboxComponent row_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.035
      padding = 0.02
      placeholder = номер строки
      pos = (0, 0.0)
      size = (0.5, 0.08)
      startVal [time (s)] = 0.0
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    ButtonComponent row_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    CodeComponent code_row
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('row_number', (row_box.text || '').trim());
      End Routine:
        thisExp.addData('row_number', (row_box.text or '').strip())
  Routine thanks
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    CodeComponent code_score
      Code Type = Both
      Begin JS Routine:
        var SUB = {'TRB': [1, 8, 15, 22], 'Psi': [2, 9, 16, 23], 'Witch': [3, 10, 17, 24], 'Super': [4, 11, 18],
               'Spirit': [5, 12, 19, 25], 'ELF': [6, 13, 20], 'Precog': [7, 14, 21, 26]};
        function _v(i) { var x = tob_resp[i]; if (x === undefined || x === null) return null; x = Number(x); return (i === 23) ? 8 - x : x; }
        var vals = []; var ok = true;
        for (var i = 1; i <= 26; i++) { var v = _v(i); if (v === null) ok = false; vals.push(v); }
        if (ok) {
          for (var k in SUB) { var ssum = 0; for (var j = 0; j < SUB[k].length; j++) { ssum += _v(SUB[k][j]); } psychoJS.experiment.addData('RPBS_' + k, ssum); }
          var tot = vals.reduce(function(a, b) { return a + b; }, 0);
          psychoJS.experiment.addData('RPBS_total', tot);
          psychoJS.experiment.addData('RPBS_mean', tot / 26.0);
        }
      Begin Routine:
        SUB = {'TRB': [1, 8, 15, 22], 'Psi': [2, 9, 16, 23], 'Witch': [3, 10, 17, 24], 'Super': [4, 11, 18],
               'Spirit': [5, 12, 19, 25], 'ELF': [6, 13, 20], 'Precog': [7, 14, 21, 26]}
        def _v(i):
            x = tob_resp.get(i)
            if x is None: return None
            x = float(x)
            return 8 - x if i == 23 else x
        vals = [_v(i) for i in range(1, 27)]
        if all(v is not None for v in vals):
            for k, idx in SUB.items():
                thisExp.addData('RPBS_' + k, sum(_v(i) for i in idx))
            thisExp.addData('RPBS_total', sum(vals))
            thisExp.addData('RPBS_mean', sum(vals) / 26.0)
    TextComponent thanks_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Спасибо за участие!

        Кнопка «Магия» не влияет на события: она использовалась, чтобы изучить, как люди принимают решения в ситуации неопределённости. Задание с буквами измеряло готовность прилагать усилия.

        Данные сохраняются, пожалуйста, подождите несколько секунд и не закрывайте окно. Затем нажмите пробел.
    KeyboardComponent thanks_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_datapipe
      Code Type = JS
      End JS Experiment:
        // Отправка данных в OSF через DataPipe (pipe.jspsych.org). Замените experimentID на ID нового эксперимента.
        psychoJS._saveResults = 0;
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';
        let dataObj = psychoJS._experiment._trialsData;
        const SEP = ';';
        let headers = [];
        dataObj.forEach((trial) => { if (trial && typeof trial === 'object') { Object.keys(trial).forEach(k => { if (!headers.includes(k)) headers.push(k); }); } });
        const formatCell = (val) => { if (val === null || val === undefined) return ''; let s = (typeof val === 'object') ? JSON.stringify(val) : String(val);
          if (s.includes(SEP) || s.includes('"') || s.includes('\n') || s.includes('\r')) { s = '"' + s.replace(/"/g, '""') + '"'; } return s; };
        let csvRows = [headers.join(SEP)];
        dataObj.forEach((row) => { csvRows.push((row && typeof row === 'object') ? headers.map(h => formatCell(row[h])).join(SEP) : new Array(headers.length).fill('').join(SEP)); });
        let data = csvRows.join('\n');
        fetch('https://pipe.jspsych.org/api/data', { method: 'POST', headers: { 'Content-Type': 'application/json', Accept: '*/*' },
          body: JSON.stringify({ experimentID: 'ВСТАВИТЬ_ID_DATAPIPE', filename: filename, data: data }) })
          .then(r => r.json()).then(d => { console.log('DataPipe:', d); }).catch(e => { console.error('Save failed:', e); });
Flow
  Routine welcome
  LoopInitiator debug_loop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nDebug
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    Routine debug_pick
  LoopTerminator debug_loop
  Routine setup
  LoopInitiator tob_block_before loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nBefore
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    Routine tob_instr_before
    LoopInitiator tob_items_before loopType="TrialHandler"
      conditions = []
      conditionsFile = tobacyk.xlsx
      loopType = sequential
      nReps = 1
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      Routine tob_item_before
    LoopTerminator tob_items_before
  LoopTerminator tob_block_before
  Routine choice_instr
  Routine choice
  LoopInitiator effort_loop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nEffort
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    Routine effort
  LoopTerminator effort_loop
  Routine rating
  LoopInitiator tob_block_after loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nAfter
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    Routine tob_instr_after
    LoopInitiator tob_items_after loopType="TrialHandler"
      conditions = []
      conditionsFile = tobacyk.xlsx
      loopType = sequential
      nReps = 1
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      Routine tob_item_after
    LoopTerminator tob_items_after
  LoopTerminator tob_block_after
  Routine suspicion
  Routine row_entry
  Routine thanks
