PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = 'data/%s_%s' % (expName, expInfo['date'])
  End Message = Спасибо!
  Experiment info = {'имя|req': '', 'пол|req': ['женский', 'мужской', 'не указывать'], 'возраст|req': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[-0.2314, -0.2314, -0.2314]
  expName = magic_vkr
  frameRateMsg = Экран загружается, подождите секунду, пожалуйста
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.031
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Здравствуйте! Это исследование принятия решений, оно займёт около 10 минут.

        Данные анонимны и используются только в обобщённом виде. Продолжая, вы даёте согласие на участие.

        Пожалуйста, проходите исследование на компьютере или ноутбуке.

        Чтобы начать, нажмите пробел.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_assign
      Code Type = Both
      Begin Experiment:
        import random, uuid
        g = str(expInfo.get('group', '')).strip()
        group_source = 'url'
        _name = str(expInfo.get('имя', '')).strip()
        _sex = str(expInfo.get('пол', '')).strip()
        _age = str(expInfo.get('возраст', '')).strip()
        nDebug = 1 if _name == '0' else 0
        thisExp.addData('name', _name)
        thisExp.addData('sex', {'женский': 'f', 'мужской': 'm', 'не указывать': 'na'}.get(_sex, _sex))
        thisExp.addData('age', _age)
        thisExp.addData('age_ok', 1 if (_age.isdigit() and 18 <= int(_age) <= 99) else 0)
        if g not in ['1', '2', '3', '4']:
            g = random.choice(['1', '2', '3', '4'])
            group_source = 'random'
        group = int(g)
        # среда прохождения (для отсева повторов и проверки качества)
        import platform, uuid, time as _time
        thisExp.addData('browser_id', 'local-' + uuid.uuid4().hex[:12])
        thisExp.addData('user_agent', 'PsychoPy/' + platform.platform())
        thisExp.addData('screen_w', int(win.size[0])); thisExp.addData('screen_h', int(win.size[1]))
        thisExp.addData('win_w', int(win.size[0])); thisExp.addData('win_h', int(win.size[1]))
        thisExp.addData('lang', ''); thisExp.addData('tz_offset_min', -_time.timezone // 60); thisExp.addData('touch', 0)
        blur_count = 0
        choice_resp = ''
        choice_rt = -1
        control_resp = ''
        control_rt = -1
        nEffort = 0
        nBefore = 0
        nAfter = 0
        tob_resp = {}
        neu_resp = {}
        # повторные прохождения отслеживаются только онлайн (хранилище браузера); локально всегда 0
        session_id = uuid.uuid4().hex[:12]
        prev_starts = 0
        prev_choice_seen = 0
        prev_completed = 0
        thisExp.addData('session_id', session_id)
        thisExp.addData('prev_starts', 0); thisExp.addData('prev_choice_seen', 0); thisExp.addData('prev_completed', 0)
        thisExp.addData('name_hash', ''); thisExp.addData('browser_prev_starts', 0)
        cond_pending = False
      Begin JS Experiment:
        GROUP_LIST = [4, 1, 2, 3, 4, 2, 1, 3, 3, 4, 2, 1, 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4];
        var _gi = function(k) { var v = expInfo[k]; if (v === undefined) { v = expInfo[k + '|req']; } return String(v === undefined || v === null ? '' : v).trim(); };
        var g = String(expInfo['group'] || '').trim();
        // ID эксперимента в DataPipe (pipe.jspsych.org): один и тот же для распределения по группам и для отправки данных
        DATAPIPE_ID = 'NXKsy6NvrnLs';
        group_source = 'url'; group_locked = false; cond_pending = false; cond_wait_t = 0; cond_index = -1;
        var _name = _gi('имя'); var _sex = _gi('пол'); var _age = _gi('возраст');
        nDebug = (_name === '0') ? 1 : 0;
        psychoJS.experiment.addData('name', _name);
        psychoJS.experiment.addData('sex', ({'женский': 'f', 'мужской': 'm', 'не указывать': 'na'})[_sex] || _sex);
        psychoJS.experiment.addData('age', _age);
        psychoJS.experiment.addData('age_ok', (/^[0-9]{1,3}$/.test(_age) && parseInt(_age) >= 18 && parseInt(_age) <= 99) ? 1 : 0);
        // История прохождений в хранилище браузера. Записи ведутся отдельно для каждого имени из стартового диалога
        // (имя хранится только в виде хеша), чтобы разные люди за одним компьютером не считались повторами друг друга.
        // Ошибки доступа к хранилищу не мешают эксперименту.
        ls_get = function(k) { try { return window.localStorage.getItem(k); } catch (e) { return null; } };
        ls_set = function(k, v) { try { window.localStorage.setItem(k, String(v)); } catch (e) {} };
        var _nm = _name.toLowerCase().replace(/ё/g, 'е').replace(/[^a-zа-я0-9]/g, '');
        var _h = 2166136261; for (var _i = 0; _i < _nm.length; _i++) { _h ^= _nm.charCodeAt(_i); _h = Math.imul(_h, 16777619) >>> 0; }
        name_hash = _h.toString(16);
        hist_update = function(field, value) {
          if (nDebug) { return; }
          var hs = {}; try { hs = JSON.parse(ls_get('magic_vkr_hist') || '{}') || {}; } catch (e) { hs = {}; }
          var rc = hs[name_hash] || {s: 0, c: 0, d: 0, g: null};
          if (value === undefined) { rc[field] = (rc[field] || 0) + 1; } else { rc[field] = value; }
          hs[name_hash] = rc; ls_set('magic_vkr_hist', JSON.stringify(hs));
        };
        var _hs = {}; try { _hs = JSON.parse(ls_get('magic_vkr_hist') || '{}') || {}; } catch (e) { _hs = {}; }
        var _rc = _hs[name_hash] || {s: 0, c: 0, d: 0, g: null};
        var _all = 0; for (var _k in _hs) { if (_hs.hasOwnProperty(_k)) { _all += (_hs[_k].s || 0); } }
        session_id = Date.now().toString(36) + Math.random().toString(36).slice(2, 8);
        prev_starts = _rc.s || 0; prev_choice_seen = _rc.c || 0; prev_completed = _rc.d || 0;
        psychoJS.experiment.addData('session_id', session_id);
        psychoJS.experiment.addData('name_hash', name_hash);
        psychoJS.experiment.addData('prev_starts', prev_starts);
        psychoJS.experiment.addData('prev_choice_seen', prev_choice_seen);
        psychoJS.experiment.addData('prev_completed', prev_completed);
        psychoJS.experiment.addData('browser_prev_starts', _all);
        hist_update('s');
        if (['1','2','3','4'].indexOf(g) < 0) {
          // без параметра в ссылке: при повторном входе с того же браузера под тем же именем берётся прежняя группа;
          // при первом входе сначала случайная группа, затем номер от DataPipe по кругу (0..399), который указывает
          // позицию в списке блоковой рандомизации GROUP_LIST (блоки по 4, группы в случайном порядке).
          // В режиме отладки DataPipe не запрашивается, чтобы не сбивать очерёдность групп.
          var _sg = nDebug ? null : String(_rc.g);
          if (['1','2','3','4'].indexOf(_sg) >= 0) {
            g = _sg; group_source = 'stored';
          } else {
            g = ['1','2','3','4'][Math.floor(Math.random()*4)]; group_source = 'random';
            if (!nDebug && DATAPIPE_ID.indexOf('ВСТАВИТЬ') < 0) {
              cond_pending = true;
              try {
                fetch('https://pipe.jspsych.org/api/condition/', { method: 'POST', headers: { 'Content-Type': 'application/json', Accept: '*/*' },
                  body: JSON.stringify({ experimentID: DATAPIPE_ID }) })
                  .then(function(r) { return r.json(); })
                  .then(function(d) { cond_pending = false; if (!group_locked && d && typeof d.condition === 'number') { cond_index = d.condition; group = GROUP_LIST[d.condition % GROUP_LIST.length]; group_source = 'datapipe'; } })
                  .catch(function(e) { cond_pending = false; console.error('DataPipe condition:', e); });
              } catch (e) { cond_pending = false; console.error('DataPipe condition:', e); }
            }
          }
        }
        group = parseInt(g);
        // среда прохождения: постоянный код браузера (для отсева повторов), user agent, экран, язык, часовой пояс, сенсорный экран
        var _bid = '';
        try { _bid = window.localStorage.getItem('magic_vkr_bid') || ''; if (!_bid) { _bid = Math.random().toString(36).slice(2, 10) + Date.now().toString(36); window.localStorage.setItem('magic_vkr_bid', _bid); } } catch (e) { _bid = 'nostorage-' + Math.random().toString(36).slice(2, 10); }
        psychoJS.experiment.addData('browser_id', _bid);
        psychoJS.experiment.addData('user_agent', window.navigator.userAgent);
        psychoJS.experiment.addData('screen_w', window.screen.width); psychoJS.experiment.addData('screen_h', window.screen.height);
        psychoJS.experiment.addData('win_w', window.innerWidth); psychoJS.experiment.addData('win_h', window.innerHeight);
        psychoJS.experiment.addData('lang', window.navigator.language || '');
        psychoJS.experiment.addData('tz_offset_min', -new Date().getTimezoneOffset());
        psychoJS.experiment.addData('touch', ('ontouchstart' in window || navigator.maxTouchPoints > 0) ? 1 : 0);
        // число уходов со вкладки за время прохождения
        blur_count = 0;
        try { document.addEventListener('visibilitychange', function() { if (document.hidden) { blur_count += 1; } }); } catch (e) {}
        // Esc у участников не прерывает эксперимент (выход по Esc остаётся только в отладке, имя 0);
        // повторы зажатой стрелки не засчитываются как новое нажатие на экранах с двумя кнопками
        try {
          window.addEventListener('keydown', function(e) {
            if (e.key === 'Escape' && !nDebug) { e.stopImmediatePropagation(); return; }
            if (e.repeat && (e.key === 'ArrowLeft' || e.key === 'ArrowRight')) { e.stopImmediatePropagation(); }
          }, true);
        } catch (e) {}
        // отправка данных в DataPipe: уникальное имя файла, повтор при сбое сети, состояние для последнего экрана
        dp_state = 'idle'; dp_error = ''; dp_attempts = 0;
        dp_send = function(tag) {
          if (DATAPIPE_ID.indexOf('ВСТАВИТЬ') >= 0) { dp_state = 'off'; return; }
          var rows = psychoJS.experiment._trialsData.slice();
          var cur = psychoJS.experiment._currentTrialData;
          if (cur && Object.keys(cur).length > 0) { rows.push(Object.assign({}, cur)); }
          var SEP = ';'; var headers = [];
          rows.forEach(function(row) { if (row && typeof row === 'object') { Object.keys(row).forEach(function(k) { if (headers.indexOf(k) < 0) { headers.push(k); } }); } });
          var fmt = function(val) {
            if (val === null || val === undefined) { return ''; }
            var x = (typeof val === 'object') ? JSON.stringify(val) : String(val);
            if (x.indexOf(SEP) >= 0 || x.indexOf('"') >= 0 || x.indexOf('\n') >= 0 || x.indexOf('\r') >= 0) { x = '"' + x.replace(/"/g, '""') + '"'; }
            return x;
          };
          var lines = [headers.join(SEP)];
          rows.forEach(function(row) { lines.push(headers.map(function(h) { return fmt((row || {})[h]); }).join(SEP)); });
          var fname = 'magic_vkr_' + String(expInfo['date'] || '').replace(/[^0-9A-Za-z_.-]/g, '') + '_' + session_id + (tag ? '_' + tag : '') + '.csv';
          var body = JSON.stringify({ experimentID: DATAPIPE_ID, filename: fname, data: lines.join('\n') });
          dp_state = 'sending'; dp_attempts = 0;
          var attempt = function() {
            dp_attempts += 1;
            fetch('https://pipe.jspsych.org/api/data', { method: 'POST', headers: { 'Content-Type': 'application/json', Accept: '*/*' }, body: body })
              .then(function(r) { return r.json().then(function(d) { return [r.status, d]; }, function() { return [r.status, {}]; }); })
              .then(function(res) {
                var st = res[0], d = res[1] || {};
                // 201 сохранено, 202 принято в очередь; FILE_EXISTS при повторе значит, что первая попытка дошла
                if (st === 201 || st === 202 || d.error === 'FILE_EXISTS') { dp_state = 'ok'; dp_error = ''; console.log('DataPipe:', st, d); return; }
                dp_error = d.error || ('HTTP ' + st);
                if ((st >= 500 || st === 429) && dp_attempts < 4) { setTimeout(attempt, 1500 * dp_attempts); } else { dp_state = 'failed'; console.error('DataPipe:', st, d); }
              })
              .catch(function(e) { dp_error = 'network'; if (dp_attempts < 4) { setTimeout(attempt, 1500 * dp_attempts); } else { dp_state = 'failed'; console.error('DataPipe:', e); } });
          };
          attempt();
        };
        choice_resp = ''; choice_rt = -1; control_resp = ''; control_rt = -1; nEffort = 0; nBefore = 0; nAfter = 0; tob_resp = {}; neu_resp = {};
      Begin JS Routine:
        cond_wait_t = 0;
      Each JS Frame:
        if (cond_pending && t < 5) { continueRoutine = true; cond_wait_t = t; }
      End JS Routine:
        psychoJS.experiment.addData('welcome_time', t);
        psychoJS.experiment.addData('cond_wait', cond_wait_t);
      End Routine:
        thisExp.addData('welcome_time', t)
  Routine debug_pick
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    TextComponent debug_text
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Отладка. Выберите группу для прохождения.
      wrapWidth = 1.4
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    TextComponent debug_hint
      letterHeight = 0.028
      pos = (0, 0.17)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        1: опросник до, бесплатная магия      2: опросник до, платная магия (алфавит объявлен в инструкции)
        3: опросник после, бесплатная магия      4: опросник после, платная магия (алфавит объявлен в инструкции)
    ButtonComponent dbg1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.45, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 1
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    ButtonComponent dbg2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.15, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 2
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    ButtonComponent dbg3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.15, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 3
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    ButtonComponent dbg4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.45, -0.05)
      size = (0.26, 0.1)
      startVal [time (s)] = 0
      text = Группа 4
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    CodeComponent code_debug
      Code Type = Both
      Begin JS Routine:
        debug_text.setText('Отладка. Выберите группу для прохождения.\nDataPipe: ' + ((DATAPIPE_ID.indexOf('ВСТАВИТЬ') >= 0) ? 'ID не вписан, данные онлайн не сохранятся' : 'ID ' + DATAPIPE_ID + ', группа DataPipe не запрашивается'));
      Begin Routine:
        debug_text.text = 'Отладка. Выберите группу для прохождения.\nЛокальный запуск: данные сохраняются в папку data.'
      End JS Routine:
        var _bs = [dbg1, dbg2, dbg3, dbg4];
        for (var i = 0; i < 4; i++) { if (_bs[i].numClicks > 0) { group = i + 1; } }
      End Routine:
        for i, b in enumerate([dbg1, dbg2, dbg3, dbg4]):
            if b.numClicks > 0:
                group = i + 1
  Routine setup
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    TextComponent setup_blank
      letterHeight = 0.031
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      wrapWidth = 1.4
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    CodeComponent code_setup
      Code Type = Both
      Begin JS Routine:
        group_locked = true;
        order = (group === 1 || group === 2) ? 'before' : 'after';
        cost = (group === 1 || group === 3) ? 'easy' : 'hard';
        nBefore = (order === 'before') ? 1 : 0;
        nAfter = 1 - nBefore;
        psychoJS.experiment.addData('group', group);
        psychoJS.experiment.addData('order', order);
        psychoJS.experiment.addData('cost', cost);
        psychoJS.experiment.addData('debug', nDebug);
        psychoJS.experiment.addData('group_source', nDebug ? 'debug' : group_source);
        psychoJS.experiment.addData('cond_index', cond_index);
        if (group_source === 'datapipe' || group_source === 'random') { hist_update('g', group); }
      Begin Routine:
        order = 'before' if group in (1, 2) else 'after'
        cost = 'easy' if group in (1, 3) else 'hard'
        nBefore = 1 if order == 'before' else 0
        nAfter = 1 - nBefore
        thisExp.addData('group', group)
        thisExp.addData('order', order)
        thisExp.addData('cost', cost)
        thisExp.addData('debug', nDebug)
        thisExp.addData('group_source', 'debug' if nDebug else group_source)
        thisExp.addData('cond_index', -1)
  Routine tob_instr_before
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    TextboxComponent tob_instr_text_before
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.029
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Сейчас Вам будет предложен опросник из 26 утверждений.
        Оцените, насколько Вы согласны с каждым из них, по шкале от 1 до 7:

        1 — абсолютно не согласен
        2 — не согласен
        3 — скорее не согласен
        4 — не знаю, не уверен
        5 — скорее согласен
        6 — согласен
        7 — абсолютно согласен

        Как отвечать: нажмите клавишу с нужной цифрой от 1 до 7 (или выберите значение стрелками влево и вправо), затем нажмите пробел, чтобы перейти к следующему утверждению. Правильных и неправильных ответов нет.

        Нажмите пробел, чтобы начать.
    KeyboardComponent tob_instr_key_before
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_tob_instr_before
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('tob_instr_time', t);
      End Routine:
        thisExp.addData('tob_instr_time', t)
  Routine tob_item_before
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    TextComponent tob_text_before
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent tob_slider_before
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent tob_hint_before
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent tob_key_before
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tob_before
      Code Type = Both
      Begin JS Routine:
        resp = null;
        keyI = 0;
      Begin Routine:
        resp = None
        key_i = 0
      Each Frame:
        _r = tob_slider_before.getRating()
        if _r is not None and int(round(_r)) != resp:
            resp = int(round(_r))
        while key_i < len(_tob_key_before_allKeys):
            _k = _tob_key_before_allKeys[key_i].name
            key_i += 1
            _new = None
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                _new = int(_k)
            elif _k == 'left':
                _new = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                _new = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
            if _new is not None and _new != resp:
                resp = _new
                tob_slider_before.recordRating(resp)
      Each JS Frame:
        var _r = tob_slider_before.getRating();
        if (typeof _r !== 'undefined' && _r !== null && Math.round(_r) !== resp) { resp = Math.round(_r); }
        while (keyI < _tob_key_before_allKeys.length) {
          var _k = _tob_key_before_allKeys[keyI].name;
          keyI += 1;
          var _new = null;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { _new = parseInt(_k); }
          else if (_k === 'left') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
          if (_new !== null && _new !== resp) { resp = _new; tob_slider_before.recordRating(resp); }
        }
      End JS Routine:
        tob_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('tob_' + String(item_n), resp);
        psychoJS.experiment.addData('tob_rt_' + String(item_n), t);
        psychoJS.experiment.addData('tob_keys_' + String(item_n), keyI);
      End Routine:
        tob_resp[int(item_n)] = resp
        thisExp.addData('tob_' + str(item_n), resp)
        thisExp.addData('tob_rt_' + str(item_n), t)
        thisExp.addData('tob_keys_' + str(item_n), key_i)
  Routine neu_instr_before
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    TextboxComponent neu_instr_text_before
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.029
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Сейчас Вам будет предложен опросник из 26 утверждений.
        Оцените, насколько Вы согласны с каждым из них, по шкале от 1 до 7:

        1 — абсолютно не согласен
        2 — не согласен
        3 — скорее не согласен
        4 — не знаю, не уверен
        5 — скорее согласен
        6 — согласен
        7 — абсолютно согласен

        Как отвечать: нажмите клавишу с нужной цифрой от 1 до 7 (или выберите значение стрелками влево и вправо), затем нажмите пробел, чтобы перейти к следующему утверждению. Правильных и неправильных ответов нет.

        Нажмите пробел, чтобы начать.
    KeyboardComponent neu_instr_key_before
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_neu_instr_before
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('neu_instr_time', t);
      End Routine:
        thisExp.addData('neu_instr_time', t)
  Routine neu_item_before
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    TextComponent neu_text_before
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent neu_slider_before
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent neu_hint_before
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent neu_key_before
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_neu_before
      Code Type = Both
      Begin JS Routine:
        resp = null;
        keyI = 0;
      Begin Routine:
        resp = None
        key_i = 0
      Each Frame:
        _r = neu_slider_before.getRating()
        if _r is not None and int(round(_r)) != resp:
            resp = int(round(_r))
        while key_i < len(_neu_key_before_allKeys):
            _k = _neu_key_before_allKeys[key_i].name
            key_i += 1
            _new = None
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                _new = int(_k)
            elif _k == 'left':
                _new = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                _new = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
            if _new is not None and _new != resp:
                resp = _new
                neu_slider_before.recordRating(resp)
      Each JS Frame:
        var _r = neu_slider_before.getRating();
        if (typeof _r !== 'undefined' && _r !== null && Math.round(_r) !== resp) { resp = Math.round(_r); }
        while (keyI < _neu_key_before_allKeys.length) {
          var _k = _neu_key_before_allKeys[keyI].name;
          keyI += 1;
          var _new = null;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { _new = parseInt(_k); }
          else if (_k === 'left') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
          if (_new !== null && _new !== resp) { resp = _new; neu_slider_before.recordRating(resp); }
        }
      End JS Routine:
        neu_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('neu_' + String(item_n), resp);
        psychoJS.experiment.addData('neu_rt_' + String(item_n), t);
        psychoJS.experiment.addData('neu_keys_' + String(item_n), keyI);
      End Routine:
        neu_resp[int(item_n)] = resp
        thisExp.addData('neu_' + str(item_n), resp)
        thisExp.addData('neu_rt_' + str(item_n), t)
        thisExp.addData('neu_keys_' + str(item_n), key_i)
  Routine control_q
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    CodeComponent code_control_q
      Code Type = Both
      Begin JS Routine:
        control_resp = ''; control_rt = -1; end_at = null;
        psychoJS.eventManager.clearEvents();
        _rm = new core.Mouse({win: psychoJS.window});
        _m0 = _rm.getPos().slice();
        _move_t = -1; _method = ''; _blur0 = blur_count;
      Begin Routine:
        control_resp = ''
        control_rt = -1
        end_at = None
        event.clearEvents()
        _rm = event.Mouse(win=win)
        _m0 = list(_rm.getPos())
        _move_t = -1
        _method = ''
        _blur0 = blur_count
      Each Frame:
        if _move_t < 0:
            _mp = _rm.getPos()
            if abs(_mp[0] - _m0[0]) > 0.005 or abs(_mp[1] - _m0[1]) > 0.005:
                _move_t = t
        if end_at is None:
            keys = event.getKeys(keyList=['left', 'right'])
            if 'left' in keys or btn_control_q_l.numClicks > 0:
                control_resp = 'ceiling'; control_rt = t; end_at = t + 0.35
                _method = 'key' if 'left' in keys else 'mouse'
                btn_control_q_l.fillColor = 'goldenrod'
            elif 'right' in keys or btn_control_q_r.numClicks > 0:
                control_resp = 'no_ceiling'; control_rt = t; end_at = t + 0.35
                _method = 'key' if 'right' in keys else 'mouse'
                btn_control_q_r.fillColor = 'goldenrod'
        elif t >= end_at:
            continueRoutine = False
      Each JS Frame:
        if (_move_t < 0) {
          var _mp = _rm.getPos();
          if (Math.abs(_mp[0] - _m0[0]) > 0.005 || Math.abs(_mp[1] - _m0[1]) > 0.005) { _move_t = t; }
        }
        if (end_at === null) {
          var keys = psychoJS.eventManager.getKeys({keyList: ['left', 'right']});
          if (keys.indexOf('left') >= 0 || btn_control_q_l.numClicks > 0) {
            control_resp = 'ceiling'; control_rt = t; end_at = t + 0.35;
            _method = (keys.indexOf('left') >= 0) ? 'key' : 'mouse';
            btn_control_q_l.setFillColor(new util.Color('goldenrod'));
          } else if (keys.indexOf('right') >= 0 || btn_control_q_r.numClicks > 0) {
            control_resp = 'no_ceiling'; control_rt = t; end_at = t + 0.35;
            _method = (keys.indexOf('right') >= 0) ? 'key' : 'mouse';
            btn_control_q_r.setFillColor(new util.Color('goldenrod'));
          }
        } else if (t >= end_at) {
          continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData('control_resp', control_resp);
        psychoJS.experiment.addData('control_rt', control_rt);
        psychoJS.experiment.addData('control_q_method', _method);
        psychoJS.experiment.addData('control_q_first_move', _move_t);
        psychoJS.experiment.addData('control_q_blur', blur_count - _blur0);
      End Routine:
        thisExp.addData('control_resp', control_resp)
        thisExp.addData('control_rt', control_rt)
        thisExp.addData('control_q_method', _method)
        thisExp.addData('control_q_first_move', _move_t)
        thisExp.addData('control_q_blur', blur_count - _blur0)
    TextComponent control_q_instr
      letterHeight = 0.027
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = А сейчас вопрос на внимание. Он кажется простым, но нам важно удостовериться, что вы внимательно читаете текст на каждом экране и отвечаете на вопросы осознанно. Поэтому ответьте, есть ли потолок в том месте, где вы сейчас находитесь, нажав на кнопку «Потолок», если он есть, или на кнопку «Нет потолка», если его нет, и после этого перейдите к следующему этапу.
      wrapWidth = 1.5
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    ButtonComponent btn_control_q_l
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.25, -0.12)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Потолок
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    ButtonComponent btn_control_q_r
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.25, -0.12)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Нет потолка
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    TextComponent control_q_keys
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.26)
      startVal [time (s)] = 0.0
      text = ← клавиша влево                                клавиша вправо →
      wrapWidth = 1.4
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  Routine choice
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    CodeComponent code_choice
      Code Type = Both
      Begin Experiment:
        TXT_CHOICE_EASY = 'А сейчас бонус за участие. Многие древние мистические учения утверждают, что мысли могут влиять на будущее. Вы можете повысить вероятность того, что что-то хорошее для вас произойдёт в ближайшее время, совершив простой выбор: нажать на кнопку «Магия» или, если не хотите воспользоваться этой возможностью, нажать на кнопку «Пропустить» и перейти к следующему этапу.'
        TXT_CHOICE_HARD = 'А сейчас бонус за участие. Многие мистические учения утверждают, что мысли могут влиять на будущее, но их влияние зависит от приложенных усилий. Вы можете повысить вероятность того, что что-то хорошее для вас произойдёт в ближайшее время, нажав на кнопку «Магия» и напечатав в появившемся поле алфавит один раз, или на кнопку «Пропустить» и перейти к следующему этапу.'
      Begin JS Experiment:
        TXT_CHOICE_EASY = "А сейчас бонус за участие. Многие древние мистические учения утверждают, что мысли могут влиять на будущее. Вы можете повысить вероятность того, что что-то хорошее для вас произойдёт в ближайшее время, совершив простой выбор: нажать на кнопку «Магия» или, если не хотите воспользоваться этой возможностью, нажать на кнопку «Пропустить» и перейти к следующему этапу.";
        TXT_CHOICE_HARD = "А сейчас бонус за участие. Многие мистические учения утверждают, что мысли могут влиять на будущее, но их влияние зависит от приложенных усилий. Вы можете повысить вероятность того, что что-то хорошее для вас произойдёт в ближайшее время, нажав на кнопку «Магия» и напечатав в появившемся поле алфавит один раз, или на кнопку «Пропустить» и перейти к следующему этапу.";
      Begin JS Routine:
        instr_txt = (cost === 'hard') ? TXT_CHOICE_HARD : TXT_CHOICE_EASY;
        hist_update('c');
        choice_resp = ''; choice_rt = -1; end_at = null;
        psychoJS.eventManager.clearEvents();
        _rm = new core.Mouse({win: psychoJS.window});
        _m0 = _rm.getPos().slice();
        _move_t = -1; _method = ''; _blur0 = blur_count;
      Begin Routine:
        instr_txt = TXT_CHOICE_HARD if cost == 'hard' else TXT_CHOICE_EASY
        choice_resp = ''
        choice_rt = -1
        end_at = None
        event.clearEvents()
        _rm = event.Mouse(win=win)
        _m0 = list(_rm.getPos())
        _move_t = -1
        _method = ''
        _blur0 = blur_count
      Each Frame:
        if _move_t < 0:
            _mp = _rm.getPos()
            if abs(_mp[0] - _m0[0]) > 0.005 or abs(_mp[1] - _m0[1]) > 0.005:
                _move_t = t
        if end_at is None:
            keys = event.getKeys(keyList=['left', 'right'])
            if 'left' in keys or btn_choice_l.numClicks > 0:
                choice_resp = 'magic'; choice_rt = t; end_at = t + 0.35
                _method = 'key' if 'left' in keys else 'mouse'
                btn_choice_l.fillColor = 'goldenrod'
            elif 'right' in keys or btn_choice_r.numClicks > 0:
                choice_resp = 'skip'; choice_rt = t; end_at = t + 0.35
                _method = 'key' if 'right' in keys else 'mouse'
                btn_choice_r.fillColor = 'goldenrod'
        elif t >= end_at:
            continueRoutine = False
      Each JS Frame:
        if (_move_t < 0) {
          var _mp = _rm.getPos();
          if (Math.abs(_mp[0] - _m0[0]) > 0.005 || Math.abs(_mp[1] - _m0[1]) > 0.005) { _move_t = t; }
        }
        if (end_at === null) {
          var keys = psychoJS.eventManager.getKeys({keyList: ['left', 'right']});
          if (keys.indexOf('left') >= 0 || btn_choice_l.numClicks > 0) {
            choice_resp = 'magic'; choice_rt = t; end_at = t + 0.35;
            _method = (keys.indexOf('left') >= 0) ? 'key' : 'mouse';
            btn_choice_l.setFillColor(new util.Color('goldenrod'));
          } else if (keys.indexOf('right') >= 0 || btn_choice_r.numClicks > 0) {
            choice_resp = 'skip'; choice_rt = t; end_at = t + 0.35;
            _method = (keys.indexOf('right') >= 0) ? 'key' : 'mouse';
            btn_choice_r.setFillColor(new util.Color('goldenrod'));
          }
        } else if (t >= end_at) {
          continueRoutine = false;
        }
      End JS Routine:
        nEffort = (choice_resp === 'magic' && cost === 'hard') ? 1 : 0;
        psychoJS.experiment.addData('choice', choice_resp);
        psychoJS.experiment.addData('choice_rt', choice_rt);
        psychoJS.experiment.addData('choice_method', _method);
        psychoJS.experiment.addData('choice_first_move', _move_t);
        psychoJS.experiment.addData('choice_blur', blur_count - _blur0);
      End Routine:
        nEffort = 1 if (choice_resp == 'magic' and cost == 'hard') else 0
        thisExp.addData('choice', choice_resp)
        thisExp.addData('choice_rt', choice_rt)
        thisExp.addData('choice_method', _method)
        thisExp.addData('choice_first_move', _move_t)
        thisExp.addData('choice_blur', blur_count - _blur0)
    TextComponent choice_instr
      letterHeight = 0.027
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
      wrapWidth = 1.5
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    ButtonComponent btn_choice_l
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.25, -0.12)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Магия
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    ButtonComponent btn_choice_r
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.25, -0.12)
      size = (0.36, 0.14)
      startVal [time (s)] = 0
      text = Пропустить
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    TextComponent choice_keys
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.26)
      startVal [time (s)] = 0.0
      text = ← клавиша влево                                клавиша вправо →
      wrapWidth = 1.4
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  Routine effort
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    TextComponent effort_text
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Для активации магии введите в поле ниже русский алфавит от А до Я один раз. Затем нажмите «Готово».
      wrapWidth = 1.3
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    TextboxComponent effort_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = 0.02
      placeholder = нажмите сюда и печатайте
      pos = (0, -0.02)
      size = (1.2, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent effort_done
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0, -0.36)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    TextComponent effort_fb
      color = gold
      letterHeight = 0.028
      pos = (0, -0.24)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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    CodeComponent code_effort
      Code Type = Both
      Begin Experiment:
        RU_ALPHA = 'абвгдежзийклмнопрстуфхцчшщъыьэюя'
        def _lev(a, b):
            prev = list(range(len(b) + 1))
            for i, ca in enumerate(a, 1):
                cur = [i]
                for j, cb in enumerate(b, 1):
                    cur.append(min(prev[j] + 1, cur[j - 1] + 1, prev[j - 1] + (0 if ca == cb else 1)))
                prev = cur
            return prev[-1]
        def check_alpha(s, want_upper):
            # возвращает: статус (empty/typed), число букв, проходы (букв / 32), целое число проходов,
            # процент правильности, расстояние до эталона, доля прописных
            letters = ''.join(ch for ch in (s or '') if ch.isalpha())
            if not letters:
                return ('empty', 0, 0.0, 0, 0.0, -1, 0.0)
            upper = 100.0 * sum(1 for ch in letters if ch.isupper()) / len(letters)
            low = letters.lower().replace('ё', '')
            n = len(low)
            passes = n / float(len(RU_ALPHA))
            k = max(1, int(passes + 0.5))  # округление как Math.round в JS
            k_cmp = min(k, 20)
            target = RU_ALPHA * k_cmp
            d = _lev(low[:len(target) + 32], target)
            acc = max(0.0, 100.0 * (1.0 - d / float(len(target))))
            return ('typed', len(letters), passes, k, acc, d, upper)
      Begin JS Experiment:
        RU_ALPHA = 'абвгдежзийклмнопрстуфхцчшщъыьэюя';
        _lev = function(a, b) {
          var prev = []; for (var j = 0; j <= b.length; j++) { prev.push(j); }
          for (var i = 1; i <= a.length; i++) {
            var cur = [i];
            for (var j2 = 1; j2 <= b.length; j2++) {
              cur.push(Math.min(prev[j2] + 1, cur[j2 - 1] + 1, prev[j2 - 1] + ((a[i - 1] === b[j2 - 1]) ? 0 : 1)));
            }
            prev = cur;
          }
          return prev[b.length];
        };
        check_alpha = function(s, want_upper) {
          var letters = (s || '').replace(/[^A-Za-zА-Яа-яЁё]/g, '');
          if (letters.length === 0) { return ['empty', 0, 0.0, 0, 0.0, -1, 0.0]; }
          var nUp = 0; for (var q = 0; q < letters.length; q++) { var ch = letters[q]; if (ch !== ch.toLowerCase()) { nUp += 1; } }
          var upper = 100.0 * nUp / letters.length;
          var low = letters.toLowerCase().replace(/ё/g, '');
          var n = low.length;
          var passes = n / RU_ALPHA.length;
          var k = Math.max(1, Math.round(passes));
          var kCmp = Math.min(k, 20);
          var target = ''; for (var r = 0; r < kCmp; r++) { target += RU_ALPHA; }
          var d = _lev(low.slice(0, target.length + 32), target);
          var acc = Math.max(0.0, 100.0 * (1.0 - d / target.length));
          return ['typed', letters.length, passes, k, acc, d, upper];
        };
      Begin JS Routine:
        effort_clicks = 0; effort_attempts = 0; effort_res = ['empty', 0, 0.0, 0, 0.0, -1, 0.0]; effort_start = -1; effort_last = -1; effort_prev = ''; effort_attempt_times = []; effort_del = 0;
      Begin Routine:
        effort_clicks = 0
        effort_attempts = 0
        effort_res = ('empty', 0, 0.0, 0, 0.0, -1, 0.0)
        effort_start = -1
        effort_last = -1
        effort_prev = ''
        effort_attempt_times = []
        effort_del = 0
      Each Frame:
        _cur = effort_box.text or ''
        if _cur != effort_prev:
            if len(_cur) < len(effort_prev):
                effort_del += 1
            effort_prev = _cur
            effort_last = t
            if effort_start < 0:
                effort_start = t
        if effort_done.numClicks > effort_clicks:
            effort_clicks = effort_done.numClicks
            effort_attempts += 1
            effort_attempt_times.append(round(t, 3))
            effort_res = check_alpha(effort_box.text, True)
            continueRoutine = False
      Each JS Frame:
        var _cur = effort_box.text || '';
        if (_cur !== effort_prev) { if (_cur.length < effort_prev.length) { effort_del += 1; } effort_prev = _cur; effort_last = t; if (effort_start < 0) { effort_start = t; } }
        if (effort_done.numClicks > effort_clicks) {
          effort_clicks = effort_done.numClicks;
          effort_attempts += 1;
          effort_attempt_times.push(Math.round(t * 1000) / 1000);
          effort_res = check_alpha(effort_box.text, true);
          continueRoutine = false;
        }
      End JS Routine:
        var txt = effort_box.text || '';
        psychoJS.experiment.addData('effort_text', txt);
        psychoJS.experiment.addData('effort_len', txt.length);
        psychoJS.experiment.addData('effort_status', effort_res[0]);
        psychoJS.experiment.addData('effort_letters', effort_res[1]);
        psychoJS.experiment.addData('effort_passes', Math.round(effort_res[2] * 100) / 100);
        psychoJS.experiment.addData('effort_times', effort_res[3]);
        psychoJS.experiment.addData('effort_acc_pct', Math.round(effort_res[4] * 10) / 10);
        psychoJS.experiment.addData('effort_dist', effort_res[5]);
        psychoJS.experiment.addData('effort_upper_pct', Math.round(effort_res[6] * 10) / 10);
        psychoJS.experiment.addData('effort_attempts', effort_attempts);
        psychoJS.experiment.addData('effort_start', effort_start);
        psychoJS.experiment.addData('effort_last_key', effort_last);
        psychoJS.experiment.addData('effort_typing', (effort_start >= 0) ? (effort_last - effort_start) : -1);
        psychoJS.experiment.addData('effort_attempt_times', effort_attempt_times.join(';'));
        psychoJS.experiment.addData('effort_deletions', effort_del);
        psychoJS.experiment.addData('effort_time', t);
      End Routine:
        txt = effort_box.text or ''
        thisExp.addData('effort_text', txt)
        thisExp.addData('effort_len', len(txt))
        thisExp.addData('effort_status', effort_res[0])
        thisExp.addData('effort_letters', effort_res[1])
        thisExp.addData('effort_passes', round(effort_res[2], 2))
        thisExp.addData('effort_times', effort_res[3])
        thisExp.addData('effort_acc_pct', round(effort_res[4], 1))
        thisExp.addData('effort_dist', effort_res[5])
        thisExp.addData('effort_upper_pct', round(effort_res[6], 1))
        thisExp.addData('effort_attempts', effort_attempts)
        thisExp.addData('effort_start', effort_start)
        thisExp.addData('effort_last_key', effort_last)
        thisExp.addData('effort_typing', (effort_last - effort_start) if effort_start >= 0 else -1)
        thisExp.addData('effort_attempt_times', ';'.join(str(x) for x in effort_attempt_times))
        thisExp.addData('effort_deletions', effort_del)
        thisExp.addData('effort_time', t)
  Routine rating
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    TextComponent rating_text
      letterHeight = 0.031
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
      text = Оцените приятное событие, о котором вы думали.
      wrapWidth = 1.3
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    TextComponent lbl_imp
      letterHeight = 0.03
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = Насколько оно для вас важно?
      wrapWidth = 1.4
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    SliderComponent importance
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'совсем не важно', 'крайне важно'
      letterHeight = 0.025
      pos = (0, 0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    TextComponent lbl_ctrl
      letterHeight = 0.03
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      text = Насколько его исход зависит от вас?
      wrapWidth = 1.4
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    SliderComponent control
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'совсем не зависит', 'полностью зависит'
      letterHeight = 0.025
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    ButtonComponent rating_done
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    CodeComponent code_rating
      Code Type = Both
      Begin Experiment:
        TXT_RATING_HINT = 'Отметьте ответ на обеих шкалах (щёлкните по шкале), затем нажмите «Готово».'
      Begin JS Experiment:
        TXT_RATING_HINT = "Отметьте ответ на обеих шкалах (щёлкните по шкале), затем нажмите «Готово».";
      Begin JS Routine:
        rating_clicks = 0; rating_tries = 0;
      Begin Routine:
        rating_clicks = 0
        rating_tries = 0
      Each Frame:
        if rating_done.numClicks > rating_clicks:
            rating_clicks = rating_done.numClicks
            rating_tries += 1
            if importance.getRating() is not None and control.getRating() is not None:
                continueRoutine = False
            else:
                rating_text.text = TXT_RATING_HINT
                rating_text.color = 'gold'
      Each JS Frame:
        if (rating_done.numClicks > rating_clicks) {
          rating_clicks = rating_done.numClicks;
          rating_tries += 1;
          var _ri = importance.getRating(), _rc = control.getRating();
          if (_ri !== undefined && _ri !== null && _rc !== undefined && _rc !== null) { continueRoutine = false; }
          else { rating_text.setText(TXT_RATING_HINT); rating_text.setColor(new util.Color('gold')); }
        }
      End JS Routine:
        psychoJS.experiment.addData('rating_time', t);
        psychoJS.experiment.addData('rating_tries', rating_tries);
        psychoJS.experiment.addData('importance_rating', importance.getRating());
        psychoJS.experiment.addData('control_rating', control.getRating());
      End Routine:
        thisExp.addData('rating_time', t)
        thisExp.addData('rating_tries', rating_tries)
        thisExp.addData('importance_rating', importance.getRating())
        thisExp.addData('control_rating', control.getRating())
  Routine tob_instr_after
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    TextboxComponent tob_instr_text_after
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.029
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
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    KeyboardComponent tob_instr_key_after
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_tob_instr_after
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('tob_instr_time', t);
      End Routine:
        thisExp.addData('tob_instr_time', t)
  Routine tob_item_after
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    TextComponent tob_text_after
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent tob_slider_after
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent tob_hint_after
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent tob_key_after
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_tob_after
      Code Type = Both
      Begin JS Routine:
        resp = null;
        keyI = 0;
      Begin Routine:
        resp = None
        key_i = 0
      Each Frame:
        _r = tob_slider_after.getRating()
        if _r is not None and int(round(_r)) != resp:
            resp = int(round(_r))
        while key_i < len(_tob_key_after_allKeys):
            _k = _tob_key_after_allKeys[key_i].name
            key_i += 1
            _new = None
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                _new = int(_k)
            elif _k == 'left':
                _new = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                _new = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
            if _new is not None and _new != resp:
                resp = _new
                tob_slider_after.recordRating(resp)
      Each JS Frame:
        var _r = tob_slider_after.getRating();
        if (typeof _r !== 'undefined' && _r !== null && Math.round(_r) !== resp) { resp = Math.round(_r); }
        while (keyI < _tob_key_after_allKeys.length) {
          var _k = _tob_key_after_allKeys[keyI].name;
          keyI += 1;
          var _new = null;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { _new = parseInt(_k); }
          else if (_k === 'left') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
          if (_new !== null && _new !== resp) { resp = _new; tob_slider_after.recordRating(resp); }
        }
      End JS Routine:
        tob_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('tob_' + String(item_n), resp);
        psychoJS.experiment.addData('tob_rt_' + String(item_n), t);
        psychoJS.experiment.addData('tob_keys_' + String(item_n), keyI);
      End Routine:
        tob_resp[int(item_n)] = resp
        thisExp.addData('tob_' + str(item_n), resp)
        thisExp.addData('tob_rt_' + str(item_n), t)
        thisExp.addData('tob_keys_' + str(item_n), key_i)
  Routine neu_instr_after
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    TextboxComponent neu_instr_text_after
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.029
      padding = 0.02
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
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    KeyboardComponent neu_instr_key_after
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_neu_instr_after
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('neu_instr_time', t);
      End Routine:
        thisExp.addData('neu_instr_time', t)
  Routine neu_item_after
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    TextComponent neu_text_after
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    SliderComponent neu_slider_after
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = '1\nабсолютно\nне согласен', '2\nне согласен', '3\nскорее\nне согласен', '4\nне знаю,\nне уверен', '5\nскорее\nсогласен', '6\nсогласен', '7\nабсолютно\nсогласен'
      letterHeight = 0.025
      pos = (0, -0.12)
      size = (1.3, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent neu_hint_after
      color = lightgrey
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Стрелки влево и вправо или клавиши 1–7: выбрать ответ.  Пробел: подтвердить
      wrapWidth = 1.4
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    KeyboardComponent neu_key_after
      allowedKeys = 'left','right','space','1','2','3','4','5','6','7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_neu_after
      Code Type = Both
      Begin JS Routine:
        resp = null;
        keyI = 0;
      Begin Routine:
        resp = None
        key_i = 0
      Each Frame:
        _r = neu_slider_after.getRating()
        if _r is not None and int(round(_r)) != resp:
            resp = int(round(_r))
        while key_i < len(_neu_key_after_allKeys):
            _k = _neu_key_after_allKeys[key_i].name
            key_i += 1
            _new = None
            if _k in ['1', '2', '3', '4', '5', '6', '7']:
                _new = int(_k)
            elif _k == 'left':
                _new = 4 if resp is None else max(1, resp - 1)
            elif _k == 'right':
                _new = 4 if resp is None else min(7, resp + 1)
            elif _k == 'space' and resp is not None:
                continueRoutine = False
            if _new is not None and _new != resp:
                resp = _new
                neu_slider_after.recordRating(resp)
      Each JS Frame:
        var _r = neu_slider_after.getRating();
        if (typeof _r !== 'undefined' && _r !== null && Math.round(_r) !== resp) { resp = Math.round(_r); }
        while (keyI < _neu_key_after_allKeys.length) {
          var _k = _neu_key_after_allKeys[keyI].name;
          keyI += 1;
          var _new = null;
          if (['1','2','3','4','5','6','7'].indexOf(_k) >= 0) { _new = parseInt(_k); }
          else if (_k === 'left') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.max(1, resp - 1); }
          else if (_k === 'right') { _new = ((resp === null) || (typeof resp === 'undefined')) ? 4 : Math.min(7, resp + 1); }
          else if (_k === 'space' && resp !== null && typeof resp !== 'undefined') { continueRoutine = false; }
          if (_new !== null && _new !== resp) { resp = _new; neu_slider_after.recordRating(resp); }
        }
      End JS Routine:
        neu_resp[Number(item_n)] = resp;
        psychoJS.experiment.addData('neu_' + String(item_n), resp);
        psychoJS.experiment.addData('neu_rt_' + String(item_n), t);
        psychoJS.experiment.addData('neu_keys_' + String(item_n), keyI);
      End Routine:
        neu_resp[int(item_n)] = resp
        thisExp.addData('neu_' + str(item_n), resp)
        thisExp.addData('neu_rt_' + str(item_n), t)
        thisExp.addData('neu_keys_' + str(item_n), key_i)
  Routine suspicion
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    TextComponent susp_text
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Как вы думаете, что изучалось в этом исследовании? Напишите в свободной форме и нажмите «Готово».
      wrapWidth = 1.3
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    TextboxComponent susp_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = 0.02
      placeholder = нажмите сюда и печатайте
      pos = (0, -0.02)
      size = (1.2, 0.26)
      startVal [time (s)] = 0.0
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    ButtonComponent susp_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.36)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    CodeComponent code_susp
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('susp_time', t);
        psychoJS.experiment.addData('susp_len', (susp_box.text || '').length);
      End Routine:
        thisExp.addData('susp_time', t)
        thisExp.addData('susp_len', len(susp_box.text or ''))
  Routine row_entry
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    TextComponent row_text
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Студенты РАНХиГС, которые хотят получить баллы за участие, введите номер вашей строки в списке группы. Если баллы вам не нужны, оставьте поле пустым и нажмите «Готово».
      wrapWidth = 1.3
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    TextboxComponent row_box
      alignment = top-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.035
      padding = 0.02
      placeholder = номер строки
      pos = (0, 0.0)
      size = (0.5, 0.08)
      startVal [time (s)] = 0.0
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    ButtonComponent row_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Готово
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    CodeComponent code_row
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('row_number', (row_box.text || '').trim());
        psychoJS.experiment.addData('row_time', t);
      End Routine:
        thisExp.addData('row_number', (row_box.text or '').strip())
        thisExp.addData('row_time', t)
  Routine thanks
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    CodeComponent code_score
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData('total_time', globalClock.getTime());
        psychoJS.experiment.addData('blur_count', blur_count);
        var _nn = 0; for (var _k in neu_resp) { if (neu_resp[_k] !== null && neu_resp[_k] !== undefined) _nn += 1; } psychoJS.experiment.addData('neu_n_answered', _nn);
        var SUB = {'TRB': [1, 8, 15, 22], 'Psi': [2, 9, 16, 23], 'Witch': [3, 10, 17, 24], 'Super': [4, 11, 18],
               'Spirit': [5, 12, 19, 25], 'ELF': [6, 13, 20], 'Precog': [7, 14, 21, 26]};
        function _v(i) { var x = tob_resp[i]; if (x === undefined || x === null) return null; x = Number(x); return (i === 23) ? 8 - x : x; }
        var vals = []; var ok = true;
        for (var i = 1; i <= 26; i++) { var v = _v(i); if (v === null) ok = false; vals.push(v); }
        if (ok) {
          for (var k in SUB) { var ssum = 0; for (var j = 0; j < SUB[k].length; j++) { ssum += _v(SUB[k][j]); } psychoJS.experiment.addData('RPBS_' + k, ssum); }
          var tot = vals.reduce(function(a, b) { return a + b; }, 0);
          psychoJS.experiment.addData('RPBS_total', tot);
          psychoJS.experiment.addData('RPBS_mean', tot / 26.0);
        }
      Begin Routine:
        thisExp.addData('total_time', globalClock.getTime())
        thisExp.addData('blur_count', blur_count)
        thisExp.addData('neu_n_answered', sum(1 for v in neu_resp.values() if v is not None))
        SUB = {'TRB': [1, 8, 15, 22], 'Psi': [2, 9, 16, 23], 'Witch': [3, 10, 17, 24], 'Super': [4, 11, 18],
               'Spirit': [5, 12, 19, 25], 'ELF': [6, 13, 20], 'Precog': [7, 14, 21, 26]}
        def _v(i):
            x = tob_resp.get(i)
            if x is None: return None
            x = float(x)
            return 8 - x if i == 23 else x
        vals = [_v(i) for i in range(1, 27)]
        if all(v is not None for v in vals):
            for k, idx in SUB.items():
                thisExp.addData('RPBS_' + k, sum(_v(i) for i in idx))
            thisExp.addData('RPBS_total', sum(vals))
            thisExp.addData('RPBS_mean', sum(vals) / 26.0)
    TextComponent thanks_text
      letterHeight = 0.031
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Спасибо за участие!

        Кнопка «Магия» не влияет на события: она использовалась, чтобы изучить, как люди принимают решения в ситуации неопределённости. Если вам предлагалось напечатать алфавит, это задание измеряло готовность прилагать усилия.

        Нажмите пробел, чтобы завершить.
    CodeComponent code_datapipe
      Code Type = Both
      Begin JS Experiment:
        TXT_THANKS_BASE = "Спасибо за участие!\n\nКнопка «Магия» не влияет на события: она использовалась, чтобы изучить, как люди принимают решения в ситуации неопределённости. Если вам предлагалось напечатать алфавит, это задание измеряло готовность прилагать усилия.\n\n";
        TXT_SAVING = "Сохраняем ответы, это займёт несколько секунд. Пожалуйста, не закрывайте окно.";
        TXT_SAVED = "Ответы сохранены. Нажмите пробел, чтобы завершить.";
        TXT_SAVE_FAILED = "Не удалось сохранить ответы: нет связи с сервером. Проверьте подключение к интернету и нажмите R, чтобы попробовать ещё раз, или пробел, чтобы завершить.";
        TXT_SAVE_OFF = "Ответы не сохранены: эксперимент не подключён к хранилищу данных (не вписан ID DataPipe). Пожалуйста, сообщите об этом исследователю. Нажмите пробел, чтобы завершить.";
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        hist_update('d');
        dp_shown = '';
        dp_send('');
      Begin Routine:
        event.clearEvents()
      Each Frame:
        if event.getKeys(keyList=['space']):
            continueRoutine = False
      Each JS Frame:
        var _msg = (dp_state === 'ok') ? TXT_SAVED : ((dp_state === 'failed') ? TXT_SAVE_FAILED : ((dp_state === 'off') ? TXT_SAVE_OFF : TXT_SAVING));
        if (_msg !== dp_shown) { thanks_text.setText(TXT_THANKS_BASE + _msg); dp_shown = _msg; }
        var _tk = psychoJS.eventManager.getKeys({keyList: ['space', 'r']});
        if (dp_state === 'failed' && _tk.indexOf('r') >= 0) { dp_send(''); }
        else if (dp_state !== 'sending' && _tk.indexOf('space') >= 0) { continueRoutine = false; }
      End JS Experiment:
        // Отправка уже выполнена на последнем экране. Если эксперимент закрыт раньше (отладочный выход по Esc),
        // отправляется то, что успело накопиться, с пометкой partial в имени файла.
        if (typeof dp_send === 'function' && dp_state === 'idle' && psychoJS.experiment._trialsData.length > 0) { dp_send('partial'); }
        psychoJS._saveResults = 0;
Flow
  Routine welcome
  LoopInitiator debug_loop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nDebug
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    Routine debug_pick
  LoopTerminator debug_loop
  Routine setup
  LoopInitiator tob_block_before loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nBefore
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    Routine tob_instr_before
    LoopInitiator tob_items_before loopType="TrialHandler"
      conditions = []
      conditionsFile = tobacyk.xlsx
      loopType = sequential
      nReps = 1
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      Routine tob_item_before
    LoopTerminator tob_items_before
  LoopTerminator tob_block_before
  LoopInitiator neu_block_before loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nAfter
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    Routine neu_instr_before
    LoopInitiator neu_items_before loopType="TrialHandler"
      conditions = []
      conditionsFile = neutral.xlsx
      loopType = sequential
      nReps = 1
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      Routine neu_item_before
    LoopTerminator neu_items_before
  LoopTerminator neu_block_before
  Routine control_q
  Routine choice
  LoopInitiator effort_loop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nEffort
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    Routine effort
  LoopTerminator effort_loop
  Routine rating
  LoopInitiator tob_block_after loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nAfter
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    Routine tob_instr_after
    LoopInitiator tob_items_after loopType="TrialHandler"
      conditions = []
      conditionsFile = tobacyk.xlsx
      loopType = sequential
      nReps = 1
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      Routine tob_item_after
    LoopTerminator tob_items_after
  LoopTerminator tob_block_after
  LoopInitiator neu_block_after loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = nBefore
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    Routine neu_instr_after
    LoopInitiator neu_items_after loopType="TrialHandler"
      conditions = []
      conditionsFile = neutral.xlsx
      loopType = sequential
      nReps = 1
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      Routine neu_item_after
    LoopTerminator neu_items_after
  LoopTerminator neu_block_after
  Routine suspicion
  Routine row_entry
  Routine thanks
